run("Detect Interest Points for Registration", "select_xml=Y:/Nikita/Janelia_SPIM_selected-MVregistration/2015-07-15fish5dpf(H2B_ablation_RoL)/MVregistration/dataset.xml process_angle=[All angles] process_channel=[All channels] process_illumination=[All illuminations] process_timepoint=[All Timepoints] type_of_interest_point_detection=Difference-of-Gaussian label_interest_points=cells downsample_images limit_amount_of_detections subpixel_localization=[3-dimensional quadratic fit] interest_point_specification=[Weak & small (beads)] downsample_xy=4x downsample_z=1x maximum_number=1000 type_of_detections_to_use=Brightest compute_on=[CPU (Java)]");

run("Register Dataset based on Interest Points", "select_xml=Y:/Nikita/Janelia_SPIM_selected-MVregistration/2015-07-15fish5dpf(H2B_ablation_RoL)/MVregistration/dataset.xml process_angle=[All angles] process_illumination=[All illuminations] process_timepoint=[All Timepoints] registration_algorithm=[Redundant geometric local descriptor matching (translation invariant)] type_of_registration=[Register timepoints individually] interest_points_channel_0=cells fix_tiles=[Fix first tile] map_back_tiles=[Do not map back (use this if tiles are fixed)] transformation=Rigid number_of_neighbors=3 redundancy=2 significance=2 allowed_error_for_ransac=12");

eval("script", "System.exit(0);");